// This CellML file was created on 18/01/2025 at 12:00:00 by
// Jose F Rodriguez Matas
// title: A model for human ventricular tissue (Epicardial Cell)
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This variant of the model was created by Penny Noble of Oxford University, and represents the parameters given for the epicardial cell variant in Ten Tusscher et al. 2004. A stimulus protocol component has been added to the model to allow simulation of trains of action potentials (JL, 18/06/07). This file is known to run in PCEnv and COR.
// created: W3CDTF 2006-11-08T00:00:00+00:00
// creator: Orgname Oxford University; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2008-05-27T12:42:02+12:00; replaced illegal - in model cmeta:id with _; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-05-06T12:50:00+12:00; A stimulus protocol component was added to the model to allow simulation of trains of action potentials. Values for the amplitude (-52 picoA per picoF) and duration (1 ms) of the stimulus were taken from the original single stimulus in the model. The period of 1000 ms is intended to reflect beat period of the human heart, on which this model is based.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-12-06T15:14:33+13:00; Units checked, curated.; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-05-06T12:50:00+12:00; Penny's file was modified to allow it to run in PCEnv. This required rearrangement of some differential equations such that the differential was on the left hand side. This modification produces a mathematically equivalent model and the output of the pre-modified model has not been altered in any way.; Given James; Family Lawson; Other Richard
// created: W3CDTF 2006-01-01
// creator: Orgname Oxford Univeristy; Orgunit unknown; unknown; Given Penny; Family Noble; Other J
def model cestariolo_2025_ventricle as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit cm2 as
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit microliter as
    unit liter {pref: micro};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millivolt_square as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit milliS_per_microF as
    unit siemens {pref: milli};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit microF_per_cm2 as
    unit farad {expo: 1, pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit microA_per_microF as
    unit ampere {pref: micro};
    unit farad {expo: -1, pref: micro};
  enddef;
  def unit millimolar_per_millisecond as
    unit millimolar;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit cm3_per_microF_second as
    unit metre {expo: 3, pref: centi};
    unit farad {expo: -1, pref: micro};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {init: -80.5174, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 301, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var Cm: microF_per_cm2 {init: 1.0, pub: out};
    var V_c: microliter {pub: out};
    var V_sr: microliter {pub: out};
    var A_c: cm2 {pub: out};
    var time: millisecond {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_CaL: microA_per_microF {pub: in};
    var i_CaT: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_b_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_b_Ca: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_Stim: microA_per_microF {pub: out};
    var stim_start: millisecond {init: 0};
    var stim_period: millisecond {init: 500};
    var stim_duration: millisecond {init: 1};
    var stim_amplitude: microA_per_microF {init: 52};
    V_c = 390e-9{microliter};
    V_sr = 0.05{dimensionless}*V_c;
    A_c = 3000.0e-8{cm2};
    i_Stim = sel
      case (time-floor(time/stim_period)*stim_period >= stim_start) and (time-floor(time/stim_period)*stim_period <= stim_start+stim_duration):
        -stim_amplitude;
      otherwise:
        0{microA_per_microF};
    endsel;
    ode(V, time) = -(i_K1+i_CaT+i_Kr+i_Ks+i_CaL+i_NaK+i_Na+i_b_Na+i_NaCa+i_b_Ca+i_p_Ca+i_Stim);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
  enddef;

  def comp inward_rectifier_potassium_current as
    var i_K1: microA_per_microF {pub: out};
    var g_K1: milliS_per_microF {init: 0.349};
    var V: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xK1_inf: dimensionless;
    xK1_inf = 0.02{dimensionless}+1.0{dimensionless}/(1{dimensionless}+exp((V+87.0762{millivolt})/13.5048{millivolt}));
    i_K1 = g_K1*xK1_inf*sqrt(K_o/4.85{millimolar})*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current as
    var i_Kr: microA_per_microF {pub: out};
    var g_Kr: milliS_per_microF {init: 0.7776};
    var E_K: millivolt {pub: in};
    var K_o: millimolar {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xr1: dimensionless {priv: in};
    var Xr2: dimensionless {priv: in};
    i_Kr = g_Kr*sqrt(K_o/4.85{millimolar})*Xr1*Xr2*(V-E_K);
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr1_gate as
    var Xr1: dimensionless {init: 0.0, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr1_inf: dimensionless;
    var alpha_xr1: dimensionless;
    var beta_xr1: dimensionless;
    var tau_xr1: millisecond;
    xr1_inf = 1{dimensionless}/(1{dimensionless}+exp((8.87{millivolt}-V)/6.56{millivolt}));
    alpha_xr1 = 690{dimensionless}/(1{dimensionless}+exp((-42{millivolt}-V)/10{millivolt}));
    beta_xr1 = 0.09{dimensionless}+6{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/11.5{millivolt}));
    tau_xr1 = 1.0798{millisecond}*alpha_xr1*beta_xr1;
    ode(Xr1, time) = (xr1_inf-Xr1)/tau_xr1;
  enddef;

  def comp rapid_time_dependent_potassium_current_Xr2_gate as
    var Xr2: dimensionless {init: 0.1, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xr2_inf: dimensionless;
    var alpha_xr2: dimensionless;
    var beta_xr2: dimensionless;
    var tau_xr2: millisecond;
    xr2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+85.0664{millivolt})/22.82{millivolt}));
    alpha_xr2 = 65{dimensionless}*exp(-sqr(85{millivolt}+V)/700{millivolt_square});
    beta_xr2 = 3.0{dimensionless}+5.0{dimensionless}/(1{dimensionless}+exp((V-5{millivolt})/15{millivolt}));
    tau_xr2 = 0.9443{millisecond}*(alpha_xr2+beta_xr2);
    ode(Xr2, time) = (xr2_inf-Xr2)/tau_xr2;
  enddef;

  def comp slow_time_dependent_potassium_current as
    var i_Ks: microA_per_microF {pub: out};
    var g_Ks: milliS_per_microF {init: 0.0648};
    var E_Ks: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Xs: dimensionless {priv: in};
    i_Ks = g_Ks*Xs*(V-E_Ks);
  enddef;

  def comp slow_time_dependent_potassium_current_Xs_gate as
    var Xs: dimensionless {init: 0.0, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var xs_inf: dimensionless;
    var alpha_xs: dimensionless;
    var beta_xs: dimensionless;
    var tau_xs: millisecond;
    xs_inf = 1{dimensionless}/(1{dimensionless}+exp((4.9182{millivolt}-V)/30{millivolt}));
    alpha_xs = 670{dimensionless}/(1{dimensionless}+exp((-35{millivolt}-V)/6{millivolt}));
    beta_xs = 1{dimensionless}/(1{dimensionless}+exp((V-5{millivolt})/21{millivolt}));
    tau_xs = 1{millisecond}*alpha_xs*beta_xs;
    ode(Xs, time) = (xs_inf-Xs)/tau_xs;
  enddef;

  def comp fast_sodium_current as
    var i_Na: microA_per_microF {pub: out};
    var g_Na: milliS_per_microF {init: 1.0};
    var E_Na: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    var j: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*j*(V-E_Na);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var m_inf: dimensionless;
    var alpha_m: dimensionless;
    var beta_m: dimensionless;
    var tau_m: millisecond;
    m_inf = 1{dimensionless}/(1{dimensionless}+exp((-58.5{millivolt}-V)/8.025{millivolt}));
    alpha_m = 1{dimensionless}/(1{dimensionless}+exp((-80{millivolt}-V)/5{millivolt}));
    beta_m = 1.95{dimensionless}/(1{dimensionless}+exp((V+45{millivolt})/6{millivolt}))+0.1{dimensionless}/(1{dimensionless}+exp((V-60{millivolt})/200{millivolt}));
    tau_m = 0.9395{millisecond}*alpha_m*beta_m;
    ode(m, time) = (m_inf-m)/tau_m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.75, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var h_inf: dimensionless;
    var alpha_h: per_millisecond;
    var beta_h: per_millisecond;
    var tau_h: millisecond;
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+70.5727{millivolt})/7.5{millivolt}));
    alpha_h = sel
      case V < -40{millivolt}:
        0.057{per_millisecond}*exp(-(V+80{millivolt})/6.8{millivolt});
      otherwise:
        0{per_millisecond};
    endsel;
    beta_h = sel
      case V < -40{millivolt}:
        2.7{per_millisecond}*exp(0.079{per_millivolt}*V)+310000{per_millisecond}*exp(0.3485{per_millivolt}*V);
      otherwise:
        0.77{per_millisecond}/(0.13{dimensionless}*(1{dimensionless}+exp((V+10.66{millivolt})/(-11.1{millivolt}))));
    endsel;
    tau_h = 3.5{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_inf-h)/tau_h;
  enddef;

  def comp fast_sodium_current_j_gate as
    var j: dimensionless {init: 0.75, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var j_inf: dimensionless;
    var alpha_j: per_millisecond;
    var beta_j: per_millisecond;
    var tau_j: millisecond;
    j_inf = 1{dimensionless}/(1{dimensionless}+exp((V+70.5727{millivolt})/7.5{millivolt}));
    alpha_j = sel
      case V < -31{millivolt}:
        (-25428{per_millisecond}*exp(0.2444{per_millivolt}*(V-9{millivolt}))-6.948e-6{per_millisecond}*exp(-0.04391{per_millivolt}*(V-9{millivolt})))*(V+28.78{millivolt})/(1{dimensionless}+exp(0.311{per_millivolt}*(V+70.23{millivolt})));
      otherwise:
        0{per_millisecond};
    endsel;
    beta_j = sel
      case V < -31{millivolt}:
        0.02424{per_millisecond}*exp(-0.01052{per_millivolt}*(V-9{millivolt}))/(1{dimensionless}+exp(-0.1378{per_millivolt}*(V+31.14{millivolt})));
      otherwise:
        0.6{per_millisecond}*exp(0.057{per_millivolt}*(V-9{millivolt}))/(1{dimensionless}+exp(-0.1{per_millivolt}*(V+23.0{millivolt})));
    endsel;
    tau_j = 0.8{dimensionless}/(alpha_j+beta_j);
    ode(j, time) = (j_inf-j)/tau_j;
  enddef;

  def comp sodium_background_current as
    var i_b_Na: microA_per_microF {pub: out};
    var g_bna: milliS_per_microF {init: 0.00038137};
    var E_Na: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_current as
    var i_CaL: microA_per_microF {pub: out};
    var g_CaL: cm3_per_microF_second {init: 0.00023843};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var dL: dimensionless {priv: in, pub: out};
    var fL: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var atmp: dimensionless;
    atmp = 2{dimensionless}*V*F/(R*T);
    i_CaL = sel
      case abs(atmp) < 1.0e-5{dimensionless}:
        g_CaL*dL*fL*fCa*2{dimensionless}*F*(Ca_i*(1.0{dimensionless}+atmp)*exp(atmp)-0.341{dimensionless}*Ca_o)/exp(atmp);
      otherwise:
        g_CaL*dL*fL*fCa*2{dimensionless}*F*atmp*(Ca_i*exp(atmp)-0.341{dimensionless}*Ca_o)/(exp(atmp)-1{dimensionless});
    endsel;
  enddef;

  def comp L_type_Ca_current_dL_gate as
    var dL: dimensionless {init: 0.0, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var dL_inf: dimensionless;
    var alpha_d: dimensionless;
    var beta_d: dimensionless;
    var gamma_d: dimensionless;
    var tau_dL: millisecond;
    dL_inf = 1{dimensionless}/(1{dimensionless}+exp((-25.0011{millivolt}-V)/5.478{millivolt}));
    alpha_d = 2.8{dimensionless}/(1{dimensionless}+exp((-20{millivolt}-V)/13{millivolt}))+2.93{dimensionless};
    beta_d = 1.4{dimensionless}/(1{dimensionless}+exp((V+5{millivolt})/5{millivolt}));
    gamma_d = 3.5{dimensionless}/(1{dimensionless}+exp((-5{millivolt}-V)/10{millivolt}));
    tau_dL = 0.756{millisecond}*(alpha_d*beta_d+gamma_d);
    ode(dL, time) = (dL_inf-dL)/tau_dL;
  enddef;

  def comp L_type_Ca_current_fL_gate as
    var fL: dimensionless {init: 1.0, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var fL_inf: dimensionless;
    var alpha_f: dimensionless;
    var beta_f: dimensionless;
    var gamma_f: dimensionless;
    var tau_fL: millisecond;
    fL_inf = 1{dimensionless}/(1{dimensionless}+exp((V+35.8779{millivolt})/4{millivolt}));
    alpha_f = 310.5{dimensionless}*exp(-sqr(V+38{millivolt})/120{millivolt_square});
    beta_f = 80{dimensionless}/(1{dimensionless}+exp((8{millivolt}-V)/10{millivolt}));
    gamma_f = 20{dimensionless}+120{dimensionless}/(1{dimensionless}+exp((35{millivolt}+V)/10{millivolt}));
    tau_fL = 1.0{millisecond}*(alpha_f+beta_f+gamma_f);
    ode(fL, time) = (fL_inf-fL)/tau_fL;
  enddef;

  def comp L_type_Ca_current_fCa_gate as
    var fCa: dimensionless {init: 1, pub: out};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var alpha_fCa: dimensionless;
    var beta_fCa: dimensionless;
    var gamma_fCa: dimensionless;
    var fCa_inf: dimensionless;
    var tau_fCa: millisecond;
    var d_fCa: per_millisecond;
    alpha_fCa = 1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.000325{millimolar}, 8{dimensionless}));
    beta_fCa = 0.1{dimensionless}/(1{dimensionless}+exp((Ca_i-0.0005{millimolar})/0.0001{millimolar}));
    gamma_fCa = 0.2{dimensionless}/(1{dimensionless}+exp((Ca_i-0.00075{millimolar})/0.0008{millimolar}));
    fCa_inf = (alpha_fCa+beta_fCa+gamma_fCa+0.23{dimensionless})/1.45{dimensionless};
    tau_fCa = 2{millisecond};
    d_fCa = (fCa_inf-fCa)/tau_fCa;
    ode(fCa, time) = sel
      case (fCa_inf > fCa) and (V > -60{millivolt}):
        0{per_millisecond};
      otherwise:
        d_fCa;
    endsel;
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: microA_per_microF {pub: out};
    var g_bca: milliS_per_microF {init: 0.00066387};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp T_type_Ca_current as
    var i_CaT: microA_per_microF {pub: out};
    var g_CaT: milliS_per_microF {init: 0.066};
    var E_Ca: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: millisecond {priv: out, pub: in};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = g_CaT*dT*fT*(V-E_Ca);
  enddef;

  def comp T_type_Ca_current_dT_gate as
    var dT: dimensionless {init: 0.0026, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var dT_inf: dimensionless;
    var tau_dT: millisecond;
    dT_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+30{millivolt})/8.5{millivolt}));
    tau_dT = 1{millisecond}/(1.068{dimensionless}*exp((V+26.3{millivolt})/30.0{millivolt})+1.068{dimensionless}*exp(-(V+26.3{millivolt})/30.0{millivolt}));
    ode(dT, time) = (dT_inf-dT)/tau_dT;
  enddef;

  def comp T_type_Ca_current_fT_gate as
    var fT: dimensionless {init: 0.742, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var fT_inf: dimensionless;
    var tau_fT: millisecond;
    fT_inf = 1{dimensionless}/(1{dimensionless}+exp((71{millivolt}+V)/9{millivolt}));
    tau_fT = 1000{millisecond}/(15.3{dimensionless}*exp(-(V+71.7{millivolt})/83.3{millivolt})+15{dimensionless}*exp((V+71.7{millivolt})/15.38{millivolt}));
    ode(fT, time) = (fT_inf-fT)/tau_fT;
  enddef;

  def comp sodium_potassium_pump_current as
    var i_NaK: microA_per_microF {pub: out};
    var P_NaK: microA_per_microF {init: 4.086};
    var K_mk: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: millisecond {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {priv: out, pub: in};
    i_NaK = P_NaK*K_o/(K_o+K_mk)*Na_i/(Na_i+K_mNa)/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0353{dimensionless}*exp(-V*F/(R*T)));
  enddef;

  def comp sodium_calcium_exchanger_current as
    var i_NaCa: microA_per_microF {pub: out};
    var K_NaCa: microA_per_microF {init: 1000};
    var K_sat: dimensionless {init: 0.1};
    var alpha: dimensionless {init: 2.5};
    var gamma: dimensionless {init: 0.35};
    var Km_Ca: millimolar {init: 1.38};
    var Km_Nai: millimolar {init: 87.5};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*pow(Na_i, 3{dimensionless})*Ca_o-exp((gamma-1{dimensionless})*V*F/(R*T))*pow(Na_o, 3{dimensionless})*Ca_i*alpha)/((pow(Km_Nai, 3{dimensionless})+pow(Na_o, 3{dimensionless}))*(Km_Ca+Ca_o)*(1{dimensionless}+K_sat*exp((gamma-1{dimensionless})*V*F/(R*T))));
  enddef;

  def comp calcium_pump_current as
    var i_p_Ca: microA_per_microF {pub: out};
    var g_pCa: microA_per_microF {init: 0.0456};
    var K_pCa: millimolar {init: 0.0005};
    var Ca_i: millimolar {pub: in};
    i_p_Ca = g_pCa*Ca_i/(Ca_i+K_pCa);
  enddef;

  def comp calcium_dynamics as
    var Ca_i: millimolar {init: 0.0002, pub: out};
    var Ca_o: millimolar {init: 1.8, pub: out};
    var Ca_SR: millimolar {init: 0.2};
    var i_rel: millimolar_per_millisecond;
    var i_up: millimolar_per_millisecond;
    var i_leak: millimolar_per_millisecond;
    var g: dimensionless {init: 1};
    var tau_g: millisecond {init: 3};
    var g_inf: dimensionless;
    var a_rel: millimolar_per_millisecond {init: 0.0132};
    var b_rel: millimolar {init: 0.25};
    var c_rel: millimolar_per_millisecond {init: 0.0066};
    var K_up: millimolar {init: 0.00025};
    var V_leak: per_millisecond {init: 8e-5};
    var Vmax_up: millimolar_per_millisecond {init: 0.000425};
    var coefCa_i_bufc: dimensionless;
    var coefCa_sr_bufsr: dimensionless;
    var Buf_c: millimolar {init: 0.19};
    var K_buf_c: millimolar {init: 0.001};
    var Buf_sr: millimolar {init: 10};
    var K_buf_sr: millimolar {init: 0.3};
    var V: millivolt {pub: in};
    var V_c: microliter {pub: in};
    var V_sr: microliter {pub: in};
    var A_c: cm2 {pub: in};
    var time: millisecond {pub: in};
    var dL: dimensionless {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var i_CaL: microA_per_microF {pub: in};
    var i_CaT: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_p_Ca: microA_per_microF {pub: in};
    var i_b_Ca: microA_per_microF {pub: in};
    var d_g: per_millisecond;
    i_rel = (a_rel*sqr(Ca_SR)/(sqr(b_rel)+sqr(Ca_SR))+c_rel)*dL*g;
    i_up = Vmax_up/(1{dimensionless}+sqr(K_up)/sqr(Ca_i));
    i_leak = V_leak*(Ca_SR-Ca_i);
    g_inf = sel
      case Ca_i <= 0.00035{millimolar}:
        1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.00035{millimolar}, 6{dimensionless}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+pow(Ca_i/0.00035{millimolar}, 16{dimensionless}));
    endsel;
    d_g = (g_inf-g)/tau_g;
    ode(g, time) = sel
      case (g_inf > g) and (V > -60{millivolt}):
        0{per_millisecond};
      otherwise:
        d_g;
    endsel;
    coefCa_i_bufc = 1{dimensionless}/(1{dimensionless}+Buf_c*K_buf_c/sqr(Ca_i+K_buf_c));
    coefCa_sr_bufsr = 1{dimensionless}/(1{dimensionless}+Buf_sr*K_buf_sr/sqr(Ca_SR+K_buf_sr));
    ode(Ca_i, time) = coefCa_i_bufc*(i_leak-i_up+i_rel-(i_CaL+i_CaT+i_b_Ca+i_p_Ca-2{dimensionless}*i_NaCa)/(2{dimensionless}*V_c*F)*Cm*A_c);
    ode(Ca_SR, time) = coefCa_sr_bufsr*V_c/V_sr*(i_up-i_rel-i_leak);
  enddef;

  def comp sodium_dynamics as
    var Na_i: millimolar {init: 11.6, pub: out};
    var Na_o: millimolar {init: 142, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var V_c: microliter {pub: in};
    var A_c: cm2 {pub: in};
    var i_Na: microA_per_microF {pub: in};
    var i_NaCa: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_b_Na: microA_per_microF {pub: in};
    ode(Na_i, time) = -1{dimensionless}*(i_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)*Cm*A_c/(V_c*F);
  enddef;

  def comp potassium_dynamics as
    var K_i: millimolar {init: 109, pub: out};
    var K_o: millimolar {init: 4.85, pub: out};
    var time: millisecond {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: microF_per_cm2 {pub: in};
    var V_c: microliter {pub: in};
    var A_c: cm2 {pub: in};
    var i_K1: microA_per_microF {pub: in};
    var i_NaK: microA_per_microF {pub: in};
    var i_Kr: microA_per_microF {pub: in};
    var i_Ks: microA_per_microF {pub: in};
    var i_Stim: microA_per_microF {pub: in};
    ode(K_i, time) = -1{dimensionless}*(i_K1+i_Kr+i_Ks+i_Stim-2{dimensionless}*i_NaK)*Cm*A_c/(V_c*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
        comp fast_sodium_current_j_gate;
      endcomp;
      comp L_type_Ca_current incl
        comp L_type_Ca_current_dL_gate;
        comp L_type_Ca_current_fL_gate;
        comp L_type_Ca_current_fCa_gate;
      endcomp;
      comp rapid_time_dependent_potassium_current incl
        comp rapid_time_dependent_potassium_current_Xr1_gate;
        comp rapid_time_dependent_potassium_current_Xr2_gate;
      endcomp;
      comp slow_time_dependent_potassium_current incl
        comp slow_time_dependent_potassium_current_Xs_gate;
      endcomp;
      comp sodium_background_current;
      comp calcium_background_current;
      comp T_type_Ca_current incl
        comp T_type_Ca_current_dT_gate;
        comp T_type_Ca_current_fT_gate;
      endcomp;
      comp sodium_potassium_pump_current;
      comp sodium_calcium_exchanger_current;
      comp calcium_pump_current;
      comp calcium_dynamics;
      comp sodium_dynamics;
      comp potassium_dynamics;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
      comp fast_sodium_current_j_gate;
    endcomp;
    comp L_type_Ca_current incl
      comp L_type_Ca_current_dL_gate;
      comp L_type_Ca_current_fL_gate;
      comp L_type_Ca_current_fCa_gate;
    endcomp;
    comp rapid_time_dependent_potassium_current incl
      comp rapid_time_dependent_potassium_current_Xr1_gate;
      comp rapid_time_dependent_potassium_current_Xr2_gate;
    endcomp;
    comp slow_time_dependent_potassium_current incl
      comp slow_time_dependent_potassium_current_Xs_gate;
    endcomp;
    comp T_type_Ca_current incl
      comp T_type_Ca_current_dT_gate;
      comp T_type_Ca_current_fT_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between rapid_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump_current and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between calcium_dynamics and environment for
    vars time and time;
  enddef;
  def map between sodium_dynamics and environment for
    vars time and time;
  enddef;
  def map between potassium_dynamics and environment for
    vars time and time;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_current for
    vars V and V;
    vars i_CaL and i_CaL;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_time_dependent_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_time_dependent_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and T_type_Ca_current for
    vars V and V;
    vars i_CaT and i_CaT;
  enddef;
  def map between membrane and inward_rectifier_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump_current for
    vars V and V;
    vars i_NaK and i_NaK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_calcium_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and calcium_pump_current for
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between membrane and calcium_dynamics for
    vars V and V;
    vars F and F;
    vars V_c and V_c;
    vars V_sr and V_sr;
    vars A_c and A_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and sodium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars A_c and A_c;
    vars Cm and Cm;
  enddef;
  def map between membrane and potassium_dynamics for
    vars F and F;
    vars V_c and V_c;
    vars A_c and A_c;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and inward_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_time_dependent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and T_type_Ca_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and slow_time_dependent_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between reversal_potentials and potassium_dynamics for
    vars K_o and K_o;
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and sodium_dynamics for
    vars Na_o and Na_o;
    vars Na_i and Na_i;
  enddef;
  def map between inward_rectifier_potassium_current and potassium_dynamics for
    vars i_K1 and i_K1;
    vars K_o and K_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and potassium_dynamics for
    vars i_Kr and i_Kr;
    vars K_o and K_o;
  enddef;
  def map between slow_time_dependent_potassium_current and potassium_dynamics for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and sodium_dynamics for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and sodium_dynamics for
    vars i_b_Na and i_b_Na;
  enddef;
  def map between L_type_Ca_current and calcium_dynamics for
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
    vars dL and dL;
    vars i_CaL and i_CaL;
  enddef;
  def map between calcium_pump_current and calcium_dynamics for
    vars Ca_i and Ca_i;
    vars i_p_Ca and i_p_Ca;
  enddef;
  def map between calcium_background_current and calcium_dynamics for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump_current and potassium_dynamics for
    vars i_NaK and i_NaK;
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump_current and sodium_dynamics for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger_current and calcium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Ca_i and Ca_i;
    vars Ca_o and Ca_o;
  enddef;
  def map between sodium_calcium_exchanger_current and sodium_dynamics for
    vars i_NaCa and i_NaCa;
    vars Na_i and Na_i;
    vars Na_o and Na_o;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr1_gate for
    vars Xr1 and Xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_time_dependent_potassium_current and rapid_time_dependent_potassium_current_Xr2_gate for
    vars Xr2 and Xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_time_dependent_potassium_current and slow_time_dependent_potassium_current_Xs_gate for
    vars Xs and Xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_j_gate for
    vars j and j;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_dL_gate for
    vars dL and dL;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_fL_gate for
    vars fL and fL;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_current and L_type_Ca_current_fCa_gate for
    vars fCa and fCa;
    vars time and time;
    vars Ca_i and Ca_i;
    vars V and V;
  enddef;
  def map between T_type_Ca_current and T_type_Ca_current_dT_gate for
    vars dT and dT;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_current and T_type_Ca_current_fT_gate for
    vars fT and fT;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_current and calcium_dynamics for
    vars i_CaT and i_CaT;
  enddef;
enddef;
// rdf:#fd5de3fc-7410-4989-bafc-f2206045803d
// li: Given K; Family Ten Tusscher; Other H
// li: Given D; Family Noble
// li: Given J; Family Noble
// li: Given A; Family Panfilov; Other V
// rdf:#cb194807-730e-441a-8ea4-06ad28d8fb5c
// title: A model for human ventricular tissue
// volume: 286 4
// first_page: 1573
// Journal: title American Journal of Physiology Heart and Circulatory Physiology
// issued: W3CDTF 2004-04-01
// last_page: 1589
// rdf:#82e40573-59fe-4e01-8d4c-e4a948a8c52e
// creator: FN James Lawson
// value: This variant (02) describes the human cardiac epicardial cell, as defined by ten Tusscher et al. in their 2004 paper.
// rdf:#0cddad49-a420-4e31-98ea-893235deb76f
// Pubmed_id: 14656705
// #tentusscher_2004_epi_cell
// simulation: endingValue 10000; nonstandard-pointDensity 10000; maximumStepSize 0.01
// title: unknown
// reference: subject_type keyword; electrophysiology; ventricular; myocyte; ventricular myocyte
